<PlusConfiguration version="2.1" PlusRevision="Plus-2.8.0.96b89a6c - Win64">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="PlusServer: NDI Aurora tracker" Description="Broadcasting tool tracking data through OpenIGTLink Tracking a single needle. The computer needs to be on the same local network as Aurora SCU unit. The needle has to be plugged into the first slot" />
    <Device Id="TrackerDevice" Type="AuroraTracker" SerialPort="COM13" BaudRate="921600" ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Needle" PortName="0" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Needle" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device Id="CaptureDevice" Type="VirtualCapture" BaseFilename="C:\\Users\\mclac\\Desktop\\Recordings\\three\\RecordingTest.igs.mha" EnableCapturingOnStart="TRUE">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>
    <Device
      Id="VideoDevice"
      Type="MmfVideo"
      FrameSize="1920 1080"
      AcquisitionRate="30"
      VideoFormat="YUY2"
      CaptureDeviceId="1">
      <DataSources>
        <DataSource
          Type="Video"
          Id="Video"
          BufferSize="150"
          PortUsImageOrientation="MN"
          ClipRectangleOrigin="360 140"
          ClipRectangleSize="1240 800" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoChannelCrop" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="TrackerStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="NeedleToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
